
# Andrew Zwaniga PhD Thesis Work

# Purpose: Simulate a point source of Rh-103m decaying in vacuum.
# Specific aims: 
# (1) Use eadl-1991 and Vacuum
# (2) Count the number of electrons and photons impingent on the outer surface of a vacuum sphere
# (3) Use Geant4 EM Livermore

# Remark: This TOPAS script was written using /Users/azwaniga/phd/dissertation/119Sb/notebooks/phase-1/ae-yield-per-decay/make-topas-scripts.py

# ------------ MATERIALS ------------ #

# ------------ GEOMETRY ------------ #
# ------------ World ------------ #
d:Ge/World/HLX = 1000. nm
d:Ge/World/HLY = 1000. nm
d:Ge/World/HLZ = 1000. nm
s:Ge/World/DrawingStyle = "FullWireFrame"
s:Ge/World/Material="Vacuum"

# ------------ Vacuum Sphere ------------ #
s:Ge/VacuumSphere/Type = "TsSphere"
s:Ge/VacuumSphere/Parent = "World"
s:Ge/VacuumSphere/Material = "Vacuum"
d:Ge/VacuumSphere/RMax = 1 nm
d:Ge/VacuumSphere/SPhi = 0. deg
d:Ge/VacuumSphere/DPhi = 360. deg
d:Ge/VacuumSphere/STheta = 0. deg
d:Ge/VacuumSphere/DTheta = 180. deg
s:Ge/VacuumSphere/Color = "white"

# ------------ SOURCE ------------ #
s:So/Rh103mL1AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mL1AtomicRelaxationPhotons/BeamEnergySpectrumValues = 10 239.7 386.7 2871.0499999999997 2896.54 3068.1699999999996 3073.2400000000002 3332.36 3336.42 3380.96 3381.3900000000003 eV
uv:So/Rh103mL1AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 10 0.001581086224376296 0.011650076156154435 0.3107335704722953 0.5241784935372905 0.003120240916830896 0.004653140744384791 0.05312659527675399 0.0904984243526981 0.0001840855655194247 0.00027428675369647534 
s:So/Rh103mL1AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Rh103mL1AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Rh103mL1AtomicRelaxationPhotons/Component = "VacuumSphere"

s:So/Rh103mL2AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mL2AtomicRelaxationPhotons/BeamEnergySpectrumValues = 7 147.0 2535.55 2656.8399999999997 2828.47 3062.98 3096.72 3141.2599999999998 eV
uv:So/Rh103mL2AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 7 2.142298464436624e-07 0.06996132692358582 0.0007783621264448447 0.8637083372936528 0.00666615856710128 4.333752429209963e-05 0.05884226333507682 
s:So/Rh103mL2AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Rh103mL2AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Rh103mL2AtomicRelaxationPhotons/Component = "VacuumSphere"

s:So/Rh103mL3AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mL3AtomicRelaxationPhotons/BeamEnergySpectrumValues = 10 2388.5499999999997 2484.35 2509.84 2681.47 2686.54 2915.98 2945.6600000000003 2949.7200000000003 2994.26 2994.69 eV
uv:So/Rh103mL3AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 10 0.11026125574399462 0.0005032790914947303 0.0004754416837474972 0.08372074850442796 0.743238363221081 0.006507989712880278 2.1238532880665933e-05 2.024986579759326e-05 0.005626097367667128 0.04962533627602855 
s:So/Rh103mL3AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Rh103mL3AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Rh103mL3AtomicRelaxationPhotons/Component = "VacuumSphere"

s:So/Rh103mM1AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mM1AtomicRelaxationPhotons/BeamEnergySpectrumValues = 4 95.8 121.29 557.11 561.17 eV
uv:So/Rh103mM1AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 4 0.043981958744043155 0.18435405782033903 0.3108537792614754 0.4608102041741424 
s:So/Rh103mM1AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Rh103mM1AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Rh103mM1AtomicRelaxationPhotons/Component = "VacuumSphere"

s:So/Rh103mM2AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mM2AtomicRelaxationPhotons/BeamEnergySpectrumValues = 3 197.12 431.63 509.90999999999997 eV
uv:So/Rh103mM2AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 3 0.4997967923380261 0.21340288067181615 0.2868003269901578 
s:So/Rh103mM2AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Rh103mM2AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Rh103mM2AtomicRelaxationPhotons/Component = "VacuumSphere"

s:So/Rh103mM3AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mM3AtomicRelaxationPhotons/BeamEnergySpectrumValues = 5 171.63 176.7 406.14 484.41999999999996 484.84999999999997 eV
uv:So/Rh103mM3AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 5 0.036627992328274094 0.3655589231169938 0.2609002438851135 0.03644401297563517 0.3004688276939833 
s:So/Rh103mM3AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Rh103mM3AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Rh103mM3AtomicRelaxationPhotons/Component = "VacuumSphere"

s:So/Rh103mM4AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mM4AtomicRelaxationPhotons/BeamEnergySpectrumValues = 2 264.19 268.25 eV
uv:So/Rh103mM4AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 2 0.8528473754497978 0.14715262455020214 
s:So/Rh103mM4AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Rh103mM4AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Rh103mM4AtomicRelaxationPhotons/Component = "VacuumSphere"

s:So/Rh103mM5AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mM5AtomicRelaxationPhotons/BeamEnergySpectrumValues = 1 263.18 eV
uv:So/Rh103mM5AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 1 1.0 
s:So/Rh103mM5AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Rh103mM5AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Rh103mM5AtomicRelaxationPhotons/Component = "VacuumSphere"

s:So/Rh103mN1AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mN1AtomicRelaxationPhotons/BeamEnergySpectrumValues = 2 29.68 33.74 eV
uv:So/Rh103mN1AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 2 0.2595218733578955 0.7404781266421044 
s:So/Rh103mN1AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Rh103mN1AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Rh103mN1AtomicRelaxationPhotons/Component = "VacuumSphere"

s:So/Rh103mN2AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mN2AtomicRelaxationPhotons/BeamEnergySpectrumValues = 2 48.6 52.28 eV
uv:So/Rh103mN2AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 2 0.971785870469452 0.028214129530548138 
s:So/Rh103mN2AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Rh103mN2AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Rh103mN2AtomicRelaxationPhotons/Component = "VacuumSphere"

s:So/Rh103mN3AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mN3AtomicRelaxationPhotons/BeamEnergySpectrumValues = 3 44.54 44.97 48.22 eV
uv:So/Rh103mN3AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 3 0.09416523682591176 0.8710888166543879 0.0347459465197005 
s:So/Rh103mN3AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Rh103mN3AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Rh103mN3AtomicRelaxationPhotons/Component = "VacuumSphere"

s:So/Rh103mKAtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mKAtomicRelaxationElectrons/BeamEnergySpectrumValues = 97 16408.6 16648.3 16795.3 19183.8 19279.6 19305.1 19476.8 19481.8 19711.3 19741.0 19745.0 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23129.7 eV
uv:So/Rh103mKAtomicRelaxationElectrons/BeamEnergySpectrumWeights = 97 0.07304492240684954 0.08350760277727873 0.12015955130935789 0.024326734932103605 0.014640040597216195 0.02105146107701273 0.0012294991205360052 0.0014673649984331724 0.004518732595484629 0.0024290572273718836 0.003460245331653198 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5.155310019725801e-06 
s:So/Rh103mKAtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Rh103mKAtomicRelaxationElectrons/Type = "Isotropic"
s:So/Rh103mKAtomicRelaxationElectrons/Component = "VacuumSphere"

s:So/Rh103mL1AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mL1AtomicRelaxationElectrons/BeamEnergySpectrumValues = 79 151.18 180.85999999999999 184.92 229.46 229.89000000000001 233.14 63.67 68.74 298.17999999999995 327.86 331.92 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3374.8300000000004 eV
uv:So/Rh103mL1AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 79 0.023092392507126802 0.015431681495525757 0.020817735554281208 0.0033369140760883243 0.005563408237451885 0.0010463442177132305 0.25666022259926935 0.38699863143051366 0.0341574152118272 0.01480001184455798 0.029354565101919243 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1.0392763028206882e-05 
s:So/Rh103mL1AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Rh103mL1AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Rh103mL1AtomicRelaxationElectrons/Component = "VacuumSphere"

s:So/Rh103mL2AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mL2AtomicRelaxationElectrons/BeamEnergySpectrumValues = 71 58.48 88.16000000000001 92.22 136.76 137.19 140.44 1919.6 2015.4 2040.89 2212.52 2217.59 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3135.13 eV
uv:So/Rh103mL2AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 71 0.016118126060416595 0.0576458309685025 0.021111376921929804 0.04530105254989725 0.01737790225650645 0.0006795509394250114 0.0014068340287418496 0.03113240024819741 0.0029702744186917702 0.001880713860224523 0.0045024774795082625 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1.3618824943086582e-06 
s:So/Rh103mL2AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Rh103mL2AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Rh103mL2AtomicRelaxationElectrons/Component = "VacuumSphere"

s:So/Rh103mL3AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mL3AtomicRelaxationElectrons/BeamEnergySpectrumValues = 65 1772.6 1868.4 1893.89 2065.52 2070.59 2300.03 2329.71 2333.77 2378.31 2378.7400000000002 2381.9900000000002 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2988.13 eV
uv:So/Rh103mL3AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 65 0.001743107029018255 0.0013066257779229412 0.03581341756204691 0.0034479821236340015 0.0036131491273728943 0.0005264798135094938 0.00018286767435858075 0.004176470814303597 0.00016074446479233227 0.00015927449107685628 2.3595601693416635e-05 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1.4747159053592754e-06 
s:So/Rh103mL3AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Rh103mL3AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Rh103mL3AtomicRelaxationElectrons/Component = "VacuumSphere"

s:So/Rh103mM1AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mM1AtomicRelaxationElectrons/BeamEnergySpectrumValues = 44 7.28 36.96 41.02 85.55999999999999 85.99000000000001 89.24 32.77 62.45 66.50999999999999 111.05000000000001 111.48 114.73 204.4 234.08 238.14000000000001 282.68 283.11 286.36 209.47 239.15 243.21 287.75 288.18 291.43 438.91 468.59000000000003 472.65 517.1899999999999 517.62 520.87 498.27000000000004 502.33 546.87 547.3 550.55 506.39000000000004 550.93 551.36 554.61 595.47 595.9 599.15 596.33 599.58 eV
uv:So/Rh103mM1AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 44 0.053191416256644926 0.05375426986277117 0.1058058750581386 0.034359676962000985 0.044612074902913454 0.0018357809956483983 0.08670536241363484 0.09429283307990449 0.15214852224461164 0.034703670839994254 0.05220434687948949 0.0028886083185417797 0.034641553887905324 0.00634870259903149 0.004807722056195467 0.0036362523550852164 0.004073561699429144 0.0008767772777797696 0.05105073205108112 0.0018829238612192694 0.012741377198285674 0.004307785620542558 0.00714264927184218 0.0012905521994385398 0.015214352087970917 0.022509442962040997 0.04205927822938446 0.02150086771580485 0.031109690021064885 0.0008920694511056233 0.0013522390341458525 0.003267341677147743 0.0010775640737010971 0.00030157730225524923 0.0005551304984438083 0.0044071427356954275 0.0008247220716016725 0.0025293002612170874 0.0010629000718069964 0.00015613160925295475 0.00032712927554207104 0.0005074144764551113 0.00030852619865076895 0.0007341523545824797 
s:So/Rh103mM1AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Rh103mM1AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Rh103mM1AtomicRelaxationElectrons/Component = "VacuumSphere"

s:So/Rh103mM2AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mM2AtomicRelaxationElectrons/BeamEnergySpectrumValues = 35 15.25 15.68 18.93 108.60000000000001 138.28 142.34 186.88 187.31 190.56 113.67 143.35 147.41 191.95 192.38 195.63 343.10999999999996 372.79 376.85 421.39 421.82000000000005 425.07 402.47 406.53 451.07 451.49999999999994 454.75000000000006 410.59000000000003 455.13000000000005 455.56 458.81 499.66999999999996 500.1 503.35 500.53000000000003 503.78 eV
uv:So/Rh103mM2AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 35 0.015922899026856577 0.03703015834016467 0.002686671437390486 0.1519767509134378 0.15642858097852327 0.23965818631853653 0.02983626918575483 0.026413324306574892 0.0052605758573724334 0.025810505680630424 0.20801195996333463 0.022151557759780706 0.004681777897246772 0.004259564652427458 0.0006527946220415701 0.0006747114778790796 0.010169449132714508 0.0016230863979875196 0.0002793072978357042 0.0005837702379501537 3.816123144190773e-05 0.0066018898366945935 0.02097194289586215 0.009289321928502675 0.015443786829878967 0.0003442521721822267 0.0005489002380698526 0.0011533822951222724 0.000724795566972367 4.253979847624586e-05 0.00019973884231090736 0.0004116521587476465 8.931313921694879e-06 9.418803325876801e-05 1.4615374117452875e-05 
s:So/Rh103mM2AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Rh103mM2AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Rh103mM2AtomicRelaxationElectrons/Component = "VacuumSphere"

s:So/Rh103mM3AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mM3AtomicRelaxationElectrons/BeamEnergySpectrumValues = 32 83.11 112.78999999999999 116.85000000000001 161.39 161.82000000000002 165.07 88.17999999999999 117.86000000000001 121.92 166.46 166.89000000000001 170.14000000000001 317.62 347.3 351.35999999999996 395.90000000000003 396.33 399.58 376.98 381.04 425.58 426.01000000000005 429.26 385.1 429.64000000000004 430.07 433.32 474.17999999999995 474.61 477.86 475.04 478.28999999999996 eV
uv:So/Rh103mM3AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 32 0.030753249359622623 0.021650268332959827 0.14916686587521572 0.007183921738924698 0.004926116620011787 0.0008981778757102816 0.1460542394645507 0.14380834439524773 0.31549521247830037 0.021838727353258293 0.04400132798834655 0.004945092631827288 0.0009292340807015789 0.0013717174448234757 0.020309537034012302 0.0007153476049081473 0.0008436838941000284 5.162275889420311e-05 0.00021693104477775414 0.018603297321825262 0.0003507229373665918 0.0016029025170419663 3.247290038817715e-05 0.024860577167316433 0.016164839769753178 0.021967536041056553 0.0005359632417368551 5.210206332766532e-05 0.00035883077870189635 8.805880335342568e-06 0.00029059019781496034 1.174120714194026e-05 
s:So/Rh103mM3AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Rh103mM3AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Rh103mM3AtomicRelaxationElectrons/Component = "VacuumSphere"

s:So/Rh103mM4AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mM4AtomicRelaxationElectrons/BeamEnergySpectrumValues = 20 145.99 175.67 179.73 224.27 224.7 227.95000000000002 205.35000000000002 209.41 253.95 254.38 257.63 213.47 258.01 258.44 261.69 302.55 302.97999999999996 306.23 303.41 306.66 eV
uv:So/Rh103mM4AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 20 0.003701219260509891 0.030277846803488453 0.032631766753840434 0.16145323965278124 0.029701746128035767 0.00014386711380722094 0.0009286284728704688 0.034488913661251286 0.11330846919230765 0.010488653554647306 0.0003400474500884792 0.015786298904642653 0.25327522437200645 0.01153591835258343 0.0005100746763523125 0.09045460841556784 0.20228946429825692 0.0048392856877407546 0.0033329709871158268 0.0005117562621058044 
s:So/Rh103mM4AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Rh103mM4AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Rh103mM4AtomicRelaxationElectrons/Component = "VacuumSphere"

s:So/Rh103mM5AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mM5AtomicRelaxationElectrons/BeamEnergySpectrumValues = 20 140.92 170.6 174.66 219.20000000000002 219.63 222.88000000000002 200.28 204.34 248.88 249.31 252.55999999999997 208.4 252.94 253.37 256.62 297.48 297.90999999999997 301.16 298.34000000000003 301.59 eV
uv:So/Rh103mM5AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 20 0.004664103358089297 0.019723003500386232 0.04848960564185153 0.0214314321924377 0.1692113643180132 0.0001798846672890239 0.00021842959544103474 0.03556520604422765 0.0028781106630038833 0.13679233189181958 0.0003083774307881091 0.02129048857588518 0.013194983332737132 0.22986013274653988 0.0006038938816044951 0.0013363435462101537 0.13815575381773218 0.00035977033488760466 0.1508286755927776 0.004908108868278485 
s:So/Rh103mM5AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Rh103mM5AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Rh103mM5AtomicRelaxationElectrons/Component = "VacuumSphere"

s:So/Rh103mN1AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mN1AtomicRelaxationElectrons/BeamEnergySpectrumValues = 11 19.439999999999998 19.87 23.119999999999997 23.5 23.93 27.18 68.04 68.47 71.72 68.89999999999999 72.15 eV
uv:So/Rh103mN1AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 11 0.06380892068749532 0.21385642084730783 0.005538428592703769 0.3307202902017621 0.34506451965205637 0.009224727558742029 0.0005399626372423453 0.020330525207081212 0.0017247875897022848 0.006333581311966666 0.00285783571394008 
s:So/Rh103mN1AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Rh103mN1AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Rh103mN1AtomicRelaxationElectrons/Component = "VacuumSphere"

s:So/Rh103mN2AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mN2AtomicRelaxationElectrons/BeamEnergySpectrumValues = 5 38.36 38.79 42.04 39.22 42.47 eV
uv:So/Rh103mN2AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 5 0.15160136592830703 0.8112273091580556 0.008912980305952558 0.027240045432809352 0.0010182991748755657 
s:So/Rh103mN2AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Rh103mN2AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Rh103mN2AtomicRelaxationElectrons/Component = "VacuumSphere"

s:So/Rh103mN3AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Rh103mN3AtomicRelaxationElectrons/BeamEnergySpectrumValues = 5 34.300000000000004 34.73 37.980000000000004 35.16 38.410000000000004 eV
uv:So/Rh103mN3AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 5 0.022288158394974996 0.5986725685221296 0.0020296153175921317 0.3675929630935633 0.00941669467174004 
s:So/Rh103mN3AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Rh103mN3AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Rh103mN3AtomicRelaxationElectrons/Component = "VacuumSphere"


# ------------ SCORING ------------ #
# ------------ Electrons ------------ #
s:Sc/VacuumSpectrumElectrons/Quantity = "PhaseSpace"
s:Sc/VacuumSpectrumElectrons/Surface = "VacuumSphere/OuterCurvedSurface"
sv:Sc/VacuumSpectrumElectrons/OnlyIncludeParticlesNamed = 1 "e-"
b:Sc/VacuumSpectrumElectrons/IncludeRunID = "True"
b:Sc/VacuumSpectrumElectrons/IncludeEventID = "True"
b:Sc/VacuumSpectrumElectrons/IncludeTrackID = "True"
b:Sc/VacuumSpectrumElectrons/IncludeParentID = "True" # Track ID of parent particle
b:Sc/VacuumSpectrumElectrons/IncludeCreatorProcess = "True"
s:Sc/VacuumSpectrumElectrons/OutputType = "ASCII"
s:Sc/VacuumSpectrumElectrons/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/VacuumSpectrumElectrons/OutputFile = "Rh103m-VacuumSpectrumElectronsPhaseSpace"
sv:Sc/VacuumSpectrumElectrons/Report = 2 "Mean" "Standard_Deviation"
# ------------ Photons ------------ #
s:Sc/VacuumSpectrumPhotons/Quantity = "PhaseSpace"
s:Sc/VacuumSpectrumPhotons/Surface = "VacuumSphere/OuterCurvedSurface"
sv:Sc/VacuumSpectrumPhotons/OnlyIncludeParticlesNamed = 1 "gamma"
b:Sc/VacuumSpectrumPhotons/IncludeRunID = "True"
b:Sc/VacuumSpectrumPhotons/IncludeEventID = "True"
b:Sc/VacuumSpectrumPhotons/IncludeTrackID = "True"
b:Sc/VacuumSpectrumPhotons/IncludeParentID = "True" # Track ID of parent particle
b:Sc/VacuumSpectrumPhotons/IncludeCreatorProcess = "True"
s:Sc/VacuumSpectrumPhotons/OutputType = "ASCII"
s:Sc/VacuumSpectrumPhotons/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/VacuumSpectrumPhotons/OutputFile = "Rh103m-VacuumSpectrumPhotonsPhaseSpace"
sv:Sc/VacuumSpectrumPhotons/Report = 2 "Mean" "Standard_Deviation"

# ------------ PHYSICS ------------ #
sv:Ph/Default/Modules = 2 "g4em-livermore" "g4radioactivedecay"
d:Ph/Default/EMRangeMin = 100 eV
d:Ph/Default/SetProductionCutLowerEdge = 100 eV
d:Ph/Default/MaxStepSize = 1000. nm
b:Ph/Default/Fluorescence = "True"
b:Ph/Default/Auger = "True"
b:Ph/Default/AugerCascade = "True"
b:Ph/Default/DeexcitationIgnoreCut = "True"

# ------------ KEY ADJUSTABLES ------------ #

i:So/Rh103mKAtomicRelaxationPhotons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mL1AtomicRelaxationPhotons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mL2AtomicRelaxationPhotons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mL3AtomicRelaxationPhotons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mM1AtomicRelaxationPhotons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mM2AtomicRelaxationPhotons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mM3AtomicRelaxationPhotons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mM4AtomicRelaxationPhotons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mM5AtomicRelaxationPhotons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mN1AtomicRelaxationPhotons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mN2AtomicRelaxationPhotons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mN3AtomicRelaxationPhotons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mKAtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mL1AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mL2AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mL3AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mM1AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mM2AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mM3AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mM4AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mM5AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mN1AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mN2AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000000
i:So/Rh103mN3AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000000


i:Ts/ShowHistoryCountAtInterval = 100000
i:Ts/NumberOfThreads = 8
i:Ts/seed = 501152494
b:Ts/ShowCPUTime = "True"
# ------------ GRAPHICS ------------ #
# b:Ts/PauseBeforeQuit = "True"
# s:Gr/MyGraphic1/Type = "OpenGL" # OpenGL, HepRep, VRML, DAWN, RayTracer, RayTracerX
# u:Gr/MyGraphic1/Zoom = 2. # increase to zoom in, decrease to zoom out
# d:Gr/MyGraphic1/Theta = 90. deg # view angle as in /vis/viewer/set/viewpointThetaPhi
# d:Gr/MyGraphic1/Phi = 0. deg # view angle as in /vis/viewer/set/viewpointThetaPhi
# u:Gr/MyGraphic1/TransX = 0. # move left or right in the view window
# u:Gr/MyGraphic1/TransY = 0. # move up or down in the view window
# s:Gr/MyGraphic1/Projection = "Perspective" # Defaults to "Orthogonal"
# d:Gr/MyGraphic1/PerspectiveAngle = 10. deg # Increase for stronger perspective effect
# i:Gr/MyGraphic1/WindowSizeX = 600
# i:Gr/MyGraphic1/WindowSizeY = 600
# i:Gr/MyGraphic1/WindowPosX = 0
# i:Gr/MyGraphic1/WindowPosY = 0
# # Remove hidden lines from wireframe geometries, like Geant4’s /vis/viewer/set/hiddenEdge
# b:Gr/MyGraphic1/HiddenLineRemovalForGeometry = "False"
# # Remove hidden trajectories lines from within geometries, like Geant4’s /vis/viewer/set/hiddenMarker
# b:Gr/MyGraphic1/HiddenLineRemovalForTrajectories = "False"
