
# Andrew Zwaniga PhD Thesis Work

# Purpose: Simulate a point source of Er165 decaying in a water sphere of radius 1000 nm.
# (1) Use eadl-1991 and G4_WATER
# (2) Score the dose to water as a function of radius. 
# (3) Use g4em-dna_opt4 and g4radioactivedecay

# Remark: This TOPAS script was written using /Users/azwaniga/phd/dissertation/119Sb/notebooks/phase-1/dpk/make-topas-scripts.py

# ------------ MATERIALS ------------ #

# ------------ GEOMETRY ------------ #
# ------------ World ------------ #
d:Ge/World/HLX = 10000. nm
d:Ge/World/HLY = 10000. nm
d:Ge/World/HLZ = 10000. nm
s:Ge/World/DrawingStyle = "FullWireFrame"
s:Ge/World/Material="Vacuum"

# ------------ Water Sphere ------------ #
s:Ge/WaterSphere/Type = "TsSphere"
s:Ge/WaterSphere/Parent = "World"
s:Ge/WaterSphere/Material = "G4_WATER"
d:Ge/WaterSphere/RMin = 1 nm
d:Ge/WaterSphere/RMax = 1000 nm
i:Ge/WaterSphere/RBins = 100
d:Ge/WaterSphere/SPhi = 0. deg
d:Ge/WaterSphere/DPhi = 360. deg
d:Ge/WaterSphere/STheta = 0. deg
d:Ge/WaterSphere/DTheta = 180. deg
s:Ge/WaterSphere/Color = "blue"

# ------------ SOURCE ------------ #
s:So/Er165L1AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165L1AtomicRelaxationPhotons/BeamEnergySpectrumValues = 12 441.4 1368.8 7724.400000000001 7920.0 8261.2 8304.199999999999 9359.16 9403.230000000001 9535.949999999999 9543.939999999999 9681.47 9687.14 eV
uv:So/Er165L1AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 12 0.0002095943332587187 0.01435034351497591 0.319564890672001 0.4347753064167513 0.007752774745654424 0.011605233801365418 0.07636788875188315 0.10865128737375897 0.0010551180354471453 0.00163343998091956 0.010156806239037499 0.013877316134946983 
s:So/Er165L1AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165L1AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165L1AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165L2AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165L2AtomicRelaxationPhotons/BeamEnergySpectrumValues = 10 927.3999999999999 7085.9 7478.6 7819.8 8837.949999999999 8961.830000000002 9094.55 9263.859999999999 9218.070000000002 9245.74 eV
uv:So/Er165L2AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 10 5.244776735454088e-06 0.026143936714482313 0.0006258626726672248 0.821044794511298 0.0055976586981323646 0.0001497193146860177 0.1451803018759202 0.00021128624674966693 0.0010079533884739243 3.324180085498528e-05 
s:So/Er165L2AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165L2AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165L2AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165L3AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165L3AtomicRelaxationPhotons/BeamEnergySpectrumValues = 15 6158.5 6355.6 6551.2 6892.400000000001 6935.4 7910.55 7990.36 8034.43 8167.15 8175.14 8336.460000000001 8337.640000000001 8290.67 8312.67 8318.339999999998 eV
uv:So/Er165L3AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 15 0.053172794658732425 0.00039207721847962524 0.00035636792302657305 0.08137233728826407 0.7187123763487429 0.008146694991583976 7.071098804407774e-05 6.866934713323401e-05 0.013664154858959455 0.12222557191424682 3.309918203883789e-05 0.00018570566540555348 0.0015694342662254538 1.6024490936373898e-05 1.3980858180739113e-05 
s:So/Er165L3AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165L3AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165L3AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165M1AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165M1AtomicRelaxationPhotons/BeamEnergySpectrumValues = 6 197.10000000000002 392.7 1831.8600000000001 1875.93 2154.17 2159.84 eV
uv:So/Er165M1AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 6 0.005733979069893734 0.0921272863299457 0.3554691216280989 0.38432636318802016 0.08076390415845405 0.08157934562558744 
s:So/Er165M1AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165M1AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165M1AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165M2AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165M2AtomicRelaxationPhotons/BeamEnergySpectrumValues = 4 536.8000000000001 1554.95 1811.55 1935.0700000000002 eV
uv:So/Er165M2AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 4 0.15909360678203402 0.134307304643649 0.6818832670102802 0.024715821564036712 
s:So/Er165M2AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165M2AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165M2AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165M3AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165M3AtomicRelaxationPhotons/BeamEnergySpectrumValues = 6 341.2 384.2 1359.3500000000001 1615.95 1623.9399999999998 1739.47 eV
uv:So/Er165M3AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 6 0.004001174064150374 0.053446282695512944 0.17310970079805083 0.08208826705407753 0.6560396912866246 0.031314884101583604 
s:So/Er165M3AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165M3AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165M3AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165M4AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165M4AtomicRelaxationPhotons/BeamEnergySpectrumValues = 5 1097.96 1142.0300000000002 1444.06 1420.27 1425.94 eV
uv:So/Er165M4AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 5 0.2526880893022368 0.029692315985611856 0.6607015008147716 0.05094145187289363 0.0059766420244860416 
s:So/Er165M4AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165M4AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165M4AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165M5AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165M5AtomicRelaxationPhotons/BeamEnergySpectrumValues = 4 1099.03 1401.06 1402.24 1382.94 eV
uv:So/Er165M5AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 4 0.2209169512721092 0.03558253094581186 0.6879941532906623 0.05550636449141662 
s:So/Er165M5AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165M5AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165M5AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165N1AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165N1AtomicRelaxationPhotons/BeamEnergySpectrumValues = 4 79.81 123.88 402.12 407.78999999999996 eV
uv:So/Er165N1AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 4 0.06715590907971533 0.5175821980806343 0.24727029236104026 0.16799160047861014 
s:So/Er165N1AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165N1AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165N1AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165N2AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165N2AtomicRelaxationPhotons/BeamEnergySpectrumValues = 2 176.79 300.31 eV
uv:So/Er165N2AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 2 0.8143218866669131 0.18567811333308687 
s:So/Er165N2AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165N2AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165N2AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165N3AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165N3AtomicRelaxationPhotons/BeamEnergySpectrumValues = 3 132.72 140.71 256.23999999999995 eV
uv:So/Er165N3AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 3 0.058118942074509156 0.6409684323691895 0.3009126255563012 
s:So/Er165N3AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165N3AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165N3AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165N4AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165N4AtomicRelaxationPhotons/BeamEnergySpectrumValues = 3 169.31 145.52 151.19 eV
uv:So/Er165N4AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 3 0.6889779170087645 0.2696385085767487 0.04138357441448665 
s:So/Er165N4AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165N4AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165N4AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165N5AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165N5AtomicRelaxationPhotons/BeamEnergySpectrumValues = 3 161.32 162.5 143.2 eV
uv:So/Er165N5AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 3 0.03379126403413045 0.6913956400158843 0.2748130959499853 
s:So/Er165N5AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165N5AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165N5AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165O1AtomicRelaxationPhotons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165O1AtomicRelaxationPhotons/BeamEnergySpectrumValues = 2 22.0 27.669999999999998 eV
uv:So/Er165O1AtomicRelaxationPhotons/BeamEnergySpectrumWeights = 2 0.19851801982590833 0.8014819801740918 
s:So/Er165O1AtomicRelaxationPhotons/BeamParticle = "gamma"
s:So/Er165O1AtomicRelaxationPhotons/Type = "Isotropic"
s:So/Er165O1AtomicRelaxationPhotons/Component = "WaterSphere"

s:So/Er165KAtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165KAtomicRelaxationElectrons/BeamEnergySpectrumValues = 149 38141.6 38583.0 39510.4 45668.9 45866.0 46061.6 46402.799999999996 46445.8 47420.9 47500.799999999996 47544.8 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57515.9 eV
uv:So/Er165KAtomicRelaxationElectrons/BeamEnergySpectrumWeights = 149 0.09343323497142653 0.12606209312699096 0.10562178122454553 0.03606742029043436 0.026266512153750064 0.022943868611899672 0.001756841540570972 0.0016001448876629464 0.00852316829061731 0.005984266203721611 0.005178177923230898 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1.7411204152596122e-06 
s:So/Er165KAtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165KAtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165KAtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165L1AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165L1AtomicRelaxationElectrons/BeamEnergySpectrumValues = 155 4.55 84.36 128.43 261.15 269.14 430.46 431.64 384.66999999999996 406.67 412.34000000000003 435.92 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9681.660000000002 eV
uv:So/Er165L1AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 155 0.05175951286095894 0.040713382601784975 0.04476744101643912 0.01201938568075548 0.017791755451877007 0.029797620642813816 0.029073010326678132 0.008111007795830495 0.004879918512675838 0.0051539777420735134 0.000599022553349248 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2.893296883050749e-06 
s:So/Er165L1AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165L1AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165L1AtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165L2AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165L2AtomicRelaxationElectrons/BeamEnergySpectrumValues = 141 490.55 570.36 614.4300000000001 747.15 755.14 916.46 917.6399999999999 870.67 892.6700000000001 898.3399999999999 921.9200000000001 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9234.59 eV
uv:So/Er165L2AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 141 0.01017809153211278 0.058383961916115175 0.01852847537201893 0.06912932560232933 0.02459493501489349 0.001679377486603205 0.0019077097447628415 0.0014815100100569747 0.006949464697512202 0.0021866417011232315 0.00010893809094773274 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3.8131666317256992e-06 
s:So/Er165L2AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165L2AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165L2AtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165L3AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165L3AtomicRelaxationElectrons/BeamEnergySpectrumValues = 129 3969.6 4166.7 4362.3 4703.5 4746.5 5721.650000000001 5801.46 5845.53 5978.25 5986.24 6147.56 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8312.86 eV
uv:So/Er165L3AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 129 0.0013345532580492398 0.0008093044777969578 0.031629744317324904 0.0033644556239982902 0.00445945122300339 0.000491893394944684 0.00014291625795448122 0.004655113960766419 0.0003121607097138605 0.0003717692119940628 0.00013942518525281945 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8.401385328200222e-06 
s:So/Er165L3AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165L3AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165L3AtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165M1AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165M1AtomicRelaxationElectrons/BeamEnergySpectrumValues = 105 16.85 24.84 186.16 187.34 140.37 162.37 168.04 191.62 35.66 79.73 212.45 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2154.36 eV
uv:So/Er165M1AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 105 0.06136850957701249 0.093058328463444 0.03203801242175933 0.042565958498558244 0.007976747269406404 0.0066645504813223405 0.009732099466089501 0.0005793936421024696 0.0642944972544939 0.08295640859658443 0.035145810014839116 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2.934962976896076e-05 
s:So/Er165M1AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165M1AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165M1AtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165M2AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165M2AtomicRelaxationElectrons/BeamEnergySpectrumValues = 94 15.35 23.34 184.66 185.84 138.87 160.87 166.54 190.12 99.94999999999999 179.76000000000002 223.83 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1957.26 eV
uv:So/Er165M2AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 94 0.009712453819869146 0.023250839671047584 0.02389822417831822 0.02522741999688954 0.003931330243880594 0.004049174298142059 0.0038103446182892724 0.00027462351907493445 0.06680205157504546 0.06669244787241918 0.0817089580897485 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9.542387415354515e-06 
s:So/Er165M2AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165M2AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165M2AtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165M3AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165M3AtomicRelaxationElectrons/BeamEnergySpectrumValues = 84 28.23 160.95 168.94 330.26 331.44 284.47 306.47 312.14 335.72 27.160000000000004 71.23 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1761.66 eV
uv:So/Er165M3AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 84 0.05784746012137225 0.010113550532457535 0.009374682321602736 0.012051390981072019 0.01751187463764006 0.0020106174357123435 0.0014053109657390394 0.005363531371658349 0.0001454615717279666 0.08087596295848361 0.13136416914853624 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7.477549177529738e-05 
s:So/Er165M3AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165M3AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165M3AtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165M4AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165M4AtomicRelaxationElectrons/BeamEnergySpectrumValues = 69 32.06 33.239999999999995 8.27 13.94 37.519999999999996 581.3 661.11 705.1800000000001 837.9 845.89 1007.2099999999999 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1420.46 eV
uv:So/Er165M4AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 69 0.11042026046156671 0.01543705863791553 0.0006554164456092026 0.0017631033001013206 0.00012403443809383288 3.9126213468840136e-05 0.00231472391153163 0.001587696668940933 0.05577016040261834 0.006748272492340072 0.013091287155599842 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6.64667974035143e-05 
s:So/Er165M4AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165M4AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165M4AtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165M5AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165M5AtomicRelaxationElectrons/BeamEnergySpectrumValues = 62 538.3 618.11 662.1800000000001 794.9 802.89 964.2099999999999 965.39 918.4200000000001 940.42 946.09 969.67 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1377.4599999999998 eV
uv:So/Er165M5AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 62 4.598596212656951e-06 0.0005955244034223406 0.004056086993224688 0.005994260940744187 0.06664456329335583 0.004623969356694999 0.015424339325228865 1.6094473939822567e-05 2.9891488186746964e-05 0.0003494970801497855 2.2993538158263643e-06 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2.9592682698075342e-05 
s:So/Er165M5AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165M5AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165M5AtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165N1AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165N1AtomicRelaxationElectrons/BeamEnergySpectrumValues = 47 68.86999999999999 70.05 23.08 45.08 50.75 74.33 112.94 114.12 67.15 89.14999999999999 94.82 118.39999999999999 76.35 84.33999999999999 245.66 246.84 199.87 221.87 227.54 251.12 92.33000000000001 253.65000000000003 254.82999999999998 207.85999999999999 229.85999999999999 235.53000000000003 259.11 414.97 416.15000000000003 369.18 391.18 396.85 420.43 417.33000000000004 370.35999999999996 392.36 398.03000000000003 421.61 323.39000000000004 345.39 351.06 374.64 367.39000000000004 373.06 396.64 378.73 402.31000000000006 eV
uv:So/Er165N1AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 47 0.02918596244199294 0.04154282191796492 0.03826898484365874 0.03067464307678973 0.05890586140407896 0.0027290877895405565 0.13564468244627598 0.1642880061431387 0.0467457522344058 0.04776981407268099 0.058431140024468295 0.0033706318233683893 0.003925073586365003 0.016279662481781317 0.0047450632462411775 0.01106732976127734 0.015854153685139136 0.0033126670025752205 0.008680049367102477 0.0009625461095645701 0.009249935078900583 0.012687243950656768 0.011174457152251429 0.022866346604697965 0.008655753154901162 0.008263712915700563 0.0013827435481668564 0.004057687493884562 0.009767117315157843 0.012171712136389306 0.0014477701745648536 0.0037151599143778673 0.0006785675002098586 0.0068000686823611175 0.015682309747049983 0.0009161102365619455 0.0046318142900685704 0.0008729472003778759 0.02155321085427048 0.026138183167501366 0.04363585707775278 0.002816510142212221 0.004589093366926616 0.019064774595957342 0.0034008595521754573 0.015388834709591554 0.006007285978922806 
s:So/Er165N1AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165N1AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165N1AtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165N2AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165N2AtomicRelaxationElectrons/BeamEnergySpectrumValues = 40 33.13 34.31 9.34 15.009999999999998 38.59 0.0 4.53 165.85000000000002 167.03 120.05999999999999 142.06 147.73000000000002 171.31 12.52 173.84 175.02 128.05 150.04999999999998 155.72 179.29999999999998 335.15999999999997 336.34 289.37 311.37 317.03999999999996 340.62 337.52 290.55 312.55 318.21999999999997 341.8 243.57999999999998 265.58000000000004 271.25 294.83000000000004 287.58 293.25 316.83 298.91999999999996 322.5 eV
uv:So/Er165N2AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 40 0.06306234110643964 0.048204497268881104 0.010289270473157943 0.009717360848950985 0.0010490979675817358 0.018281897574369335 0.24420120726131508 0.10231339109894153 0.2129562916827027 0.025240364795279274 0.017713089629369936 0.03006177504218005 0.0018495613277187048 0.015823166450285756 0.033720355748749604 0.008851442052117693 0.005311285458776156 0.02191166268055897 0.004520107125428271 0.0003415409056696814 0.002306848897081104 0.016314732577600098 0.0031339266659023016 0.011918652598807047 0.0035374451253891207 0.00022593331727046375 0.0008151323017053704 0.002130063187666956 0.02459581584511461 0.001717970085983752 0.00013112498931213873 0.00037577944195442956 0.005787743406724638 0.0009381228871602619 4.7972371599154e-05 0.012424126255471419 0.03417330096722142 0.0016610192535662226 0.0020089075956529244 0.0003356757303423526 
s:So/Er165N2AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165N2AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165N2AtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165N3AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165N3AtomicRelaxationElectrons/BeamEnergySpectrumValues = 32 121.78 122.96000000000001 75.99000000000001 97.99 103.66 127.24 129.77 130.95000000000002 83.97999999999999 105.98 111.65 135.23000000000002 291.09 292.27 245.29999999999998 267.3 272.96999999999997 296.55 293.45 246.48 268.48 274.15 297.73 199.51000000000002 221.51000000000002 227.17999999999998 250.76 243.51 249.18 272.76 254.85000000000002 278.43 eV
uv:So/Er165N3AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 32 0.019412059426006222 0.056015348182157414 0.012541128770931213 0.009322155370185803 0.0344911797156944 0.0008929189266617557 0.2558055404418547 0.26598851252164374 0.0648565604107494 0.0627192464890029 0.08934480291300996 0.004773974549203125 0.0006477334429474523 0.018606303379696622 0.004065407324914259 0.001737586508752921 0.02496433470439979 0.0002299945417687346 0.007420387065253982 0.008538803662800402 0.006862969113207306 0.030026915146307277 0.0005329052047987186 1.677144803342681e-05 0.00029119439400507 0.005543873651296986 3.049330546953737e-06 2.4838210278580967e-05 0.00338457547198111 1.1922508966260797e-05 0.010297794316775548 0.0006292128561680148 
s:So/Er165N3AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165N3AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165N3AtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165N4AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165N4AtomicRelaxationElectrons/BeamEnergySpectrumValues = 23 0.0 0.0 2.51 158.37 159.54999999999998 112.57999999999998 134.58 140.25 163.83 160.73 113.75999999999999 135.76 141.42999999999998 165.01 66.79 88.78999999999999 94.46 118.03999999999999 110.79 116.46000000000001 140.04000000000002 122.13000000000001 145.71 eV
uv:So/Er165N4AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 23 0.04024936155263527 0.003549742996724945 0.00011419456527213854 0.16350296831716093 0.5209563888096086 0.06273085718832506 0.05091608139522679 0.07747767587453373 0.0046626472341129545 0.0048284053123328965 0.005504118243202582 0.01411098769898551 0.0046398961253376675 0.00034716591913106886 0.0033137314947043945 0.0031912555258380515 0.0036837795289953457 0.0002757924407445997 0.006021703467718499 0.018189086445127903 0.0007255503596967798 0.010164895386176645 0.0008437141184075605 
s:So/Er165N4AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165N4AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165N4AtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165N5AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165N5AtomicRelaxationElectrons/BeamEnergySpectrumValues = 20 150.38 151.56 104.59 126.59 132.26 155.84 152.74 105.77000000000001 127.77000000000001 133.44 157.02 58.8 80.8 86.47 110.05 102.8 108.47 132.05 114.14 137.72 eV
uv:So/Er165N5AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 20 0.01100743990722224 0.42403379856099577 0.00924927367039904 0.005084939412718736 0.016800124034323797 0.0006240896111585647 0.2969265640401176 0.06863366643329499 0.06645325948586049 0.08223123338443565 0.005106540472235585 0.0030833712372008246 0.0016317000337444652 0.004134102774847234 0.0002512993260560335 0.0003027758509435457 0.0027441245973906154 6.342481094257939e-05 0.0014868929310574435 0.00015137942505483336 
s:So/Er165N5AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165N5AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165N5AtomicRelaxationElectrons/Component = "WaterSphere"

s:So/Er165O1AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Er165O1AtomicRelaxationElectrons/BeamEnergySpectrumValues = 3 16.52 22.189999999999998 45.769999999999996 eV
uv:So/Er165O1AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 3 0.4153309543135951 0.577050936524397 0.007618109162007992 
s:So/Er165O1AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Er165O1AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Er165O1AtomicRelaxationElectrons/Component = "WaterSphere"


# ------------ SCORING ------------ #
s:Sc/DosePointKernel/Quantity = "DoseToMedium"
s:Sc/DosePointKernel/Component = "WaterSphere"
s:Sc/DosePointKernel/OutputType = "CSV"
s:Sc/DosePointKernel/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DosePointKernel/OutputFile = "Er165-DosePointKernel-1000nm"
sv:Sc/DosePointKernel/Report = 2 "Mean" "Standard_Deviation"

# ------------ PHYSICS ------------ #
sv:Ph/Default/Modules = 2 "g4em-dna_opt4" "g4radioactivedecay"
d:Ph/Default/EMRangeMin = 10 eV
d:Ph/Default/SetProductionCutLowerEdge = 10 eV
d:Ph/Default/MaxStepSize = 1000. nm
b:Ph/Default/Fluorescence = "True"
b:Ph/Default/Auger = "True"
b:Ph/Default/AugerCascade = "True"
b:Ph/Default/DeexcitationIgnoreCut = "True"
d:Ph/Default/DefaultRegionForTheWorld/CutForAllParticles = 1 nm

# ------------ KEY ADJUSTABLES ------------ #

i:So/Er165KAtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165L1AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165L2AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165L3AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165M1AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165M2AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165M3AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165M4AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165M5AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165N1AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165N2AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165N3AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165N4AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165N5AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165O1AtomicRelaxationPhotons/NumberOfHistoriesInRun = 1000000
i:So/Er165KAtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165L1AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165L2AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165L3AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165M1AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165M2AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165M3AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165M4AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165M5AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165N1AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165N2AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165N3AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165N4AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165N5AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000
i:So/Er165O1AtomicRelaxationElectrons/NumberOfHistoriesInRun = 1000000

i:Ts/ShowHistoryCountAtInterval = 10000
i:Ts/NumberOfThreads = 8
i:Ts/seed = 501152494
b:Ts/ShowCPUTime = "True"
# ------------ GRAPHICS ------------ #
# b:Ts/PauseBeforeQuit = "True"
# s:Gr/MyGraphic1/Type = "OpenGL" # OpenGL, HepRep, VRML, DAWN, RayTracer, RayTracerX
# u:Gr/MyGraphic1/Zoom = 2. # increase to zoom in, decrease to zoom out
# d:Gr/MyGraphic1/Theta = 90. deg # view angle as in /vis/viewer/set/viewpointThetaPhi
# d:Gr/MyGraphic1/Phi = 0. deg # view angle as in /vis/viewer/set/viewpointThetaPhi
# u:Gr/MyGraphic1/TransX = 0. # move left or right in the view window
# u:Gr/MyGraphic1/TransY = 0. # move up or down in the view window
# s:Gr/MyGraphic1/Projection = "Perspective" # Defaults to "Orthogonal"
# d:Gr/MyGraphic1/PerspectiveAngle = 10. deg # Increase for stronger perspective effect
# i:Gr/MyGraphic1/WindowSizeX = 600
# i:Gr/MyGraphic1/WindowSizeY = 600
# i:Gr/MyGraphic1/WindowPosX = 0
# i:Gr/MyGraphic1/WindowPosY = 0
# # Remove hidden lines from wireframe geometries, like Geant4’s /vis/viewer/set/hiddenEdge
# b:Gr/MyGraphic1/HiddenLineRemovalForGeometry = "False"
# # Remove hidden trajectories lines from within geometries, like Geant4’s /vis/viewer/set/hiddenMarker
# b:Gr/MyGraphic1/HiddenLineRemovalForTrajectories = "False"
